PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 2160]
  color = grey
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 1000
  elSimMode = True
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = DMS_etROI_12-36_stimBlast
  eyetracker = SR Research Ltd
  keyboardBackend = Pyglet
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Routines
  Routine trial
    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisTrial['total_dur']
      syncScreenRefresh = False
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    PolygonComponent Fixation
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample
      image [set every repeat] = $thisTrial["stimImage"]
      size = (fixation_x, fixation_y)
      startVal [time (s)] = $thisTrial['cue_onset']
      stopVal [duration (s)] = $thisTrial['cue_dur']
      units = cm
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    PolygonComponent Delay
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisTrial['circle_dur']
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    ImageComponent Response_1
      image = $thisTrial["responseImage1"]
      pos [set every repeat] = float(thisTrial["responseImage1_X"]), float(thisTrial["responseImage1_Y"])
      size = responseImage_size
      startVal [time (s)] = $thisTrial['resp_onset']
      stopVal [duration (s)] = $thisTrial['resp_dur']
      units = cm
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    ImageComponent Response_2
      image = $thisTrial["responseImage2"]
      pos [set every repeat] = float(thisTrial["responseImage2_X"]), float(thisTrial["responseImage2_Y"])
      size = responseImage_size
      startVal [time (s)] = $thisTrial['resp_onset']
      stopVal [duration (s)] = $thisTrial['resp_dur']
      units = cm
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    ImageComponent Response_3
      image = $thisTrial["responseImage3"]
      pos [set every repeat] = float(thisTrial["responseImage3_X"]), float(thisTrial["responseImage3_Y"])
      size = responseImage_size
      startVal [time (s)] = $thisTrial['resp_onset']
      stopVal [duration (s)] = $thisTrial['resp_dur']
      units = cm
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = $thisTrial['cross_onset']
      stopVal [duration (s)] = $thisTrial['cross_dur']
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial['targImage_pos']
      save = every look
      shape = triangle
      size = responseImage_size
      startVal [time (s)] = $thisTrial["resp_onset"]
      stopVal [duration (s)] = $thisTrial["resp_dur"]
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent etrecord_pos
      disabled = True
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisTrial['total_dur']
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  Routine codeStart
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import pandas as pd
        from math import atan2, degrees

        # 12 delays = 12s
        # 12 block = 36s
        # 6/6

        #trialNum = 30 # 9 trials * 4sec/trial = 36 sec + 12 sec baseline
        #trialNum = 12 # 9 trials * 4sec/trial = 36 sec + 12 sec baseline
        #trialNum = 9 # 9 trials * 4sec/trial = 36 sec + 12 sec baseline

        #trialNum = 30 # 9 trials * 4sec/trial = 36 sec + 12 sec baseline
        #trialNum = 12 # 9 trials * 4sec/trial = 36 sec + 12 sec baseline
        #trialNum = 18 # 18 trials * 2sec/trial = 36 sec + 12 sec baseline





        baseline_duration=12
        blockNum = 12
        blockNum_count=0

        #paradigm_name="stimBlast"
        paradigm_name="stimBlast2"

        #paradigm_name = 'testing'
        #paradigm_name = 'bastos'

        if paradigm_name == "testing":
            print("testing")
            trialNum=2
            baseline_duration=2
            blockNum=2


        # bastos timings
        elif paradigm_name == "bastos":
            trialNum=9

            cue_onset=0
            cue_dur=1
            delayTime = random.uniform(0.5, 1.2)
            delay_resp_period = 2
            rest_dur=1
            print("using bastos timings ")


        elif paradigm_name == "stimBlast":
            trialNum = 30
            cue_onset=0
            cue_dur=.2
            delayTime = random.uniform(0.3, .6)
            delay_resp_period = .8
            rest_dur=0.2

            total_trial_time = cue_dur + \
            delay_resp_period + \
            rest_dur
            print("using stimBlast timings ")


        elif paradigm_name == "stimBlast2":
            trialNum = 40
            cue_onset=0
            cue_dur=.1
            delayTime = random.uniform(0.3, .5)
            delay_resp_period = .7
            rest_dur=0.1

            total_trial_time = cue_dur + \
            delay_resp_period + \
            rest_dur
            print("using stimBlast2 timings ")

        else:
            print("NO PARADIGM NAME" )
            exit

                # | cue_dur (0.2s) | delay_resp_period (1s) | rest (0.2s) |
                # | cue_dur (0.2s) | delay + resp           |

        #        delayTime = random.uniform(0.5, 1.2)
        #        cue_dur=1
        #        cue_dur=0.5
        #        rest_dur=0.5
        #        delay_response_total_time = 2


        #        cue_onset=0
        #        cue_dur=0.2
        #
        #        delayTime = random.uniform(0.3, .6)
        #        delay_resp_period = .8
        #
        #        rest_dur=0.2

        #
        #
        #        circle_onset=cue_onset
        #        circle_dur=(cue_onset + cue_dur)+delayTime-.25
        #
        #        delay_onset=(cue_onset + cue_dur)
        #        delay_dur=delayTime
        #
        #        resp_onset=delay_onset + delayTime
        #        resp_dur=delay_resp_period - delayTime
        #
        #        rest_onset=resp_onset + resp_dur
        #
        #        cross_onset=rest_onset
        #        cross_dur=rest_dur


        blockTypes=["PRED","UNPRED",
        "PRED","UNPRED",
        "PRED","UNPRED",
        "PRED","UNPRED",
        "PRED","UNPRED",
        "PRED","UNPRED"]

        #i=0
        #for i_block in range(blockNum):
        #    blockTypes.append(blockTemp[i])
        #    i += 1
        #    if i > 1:
        #        i=0
        #


        # BASTOS
        # monitor_distance = 50
        # OP4
        #monitor_distance = 54
        # 7TB
        monitor_distance = 172

        fixation_degrees = 2.5
        ecc_upper_deg = 8
        ecc_lower_deg = 3
        # fixation radius using monitor distance and fixation degree 2.5 (2 to 3?)
        fixation_radius_cm = monitor_distance * tan(fixation_degrees*pi/180)

        # calc the x and y components of that diameter
        fixation_x = fixation_radius_cm*2 * cos(45*pi/180)
        fixation_y = fixation_radius_cm*2 * sin(45*pi/180)

        print(fixation_radius_cm, fixation_x, fixation_y)

        eccentricity_upper_range_cm = monitor_distance * tan(ecc_upper_deg*pi/180)
        eccentricity_lower_range_cm = monitor_distance * tan(ecc_lower_deg*pi/180)

        #54 upper = 7.58
        #54 lower = 2.83

        ecc = (eccentricity_upper_range_cm - eccentricity_lower_range_cm)
        center_ecc = eccentricity_lower_range_cm + (ecc /2)

        center_x_UR = center_ecc * cos(45*pi/180)
        center_y_UR = center_ecc * sin(45*pi/180)

        center_x_UL = center_ecc * cos(135*pi/180)
        center_y_UL = center_ecc * sin(135*pi/180)

        center_x_LR = center_ecc * cos(225*pi/180)
        center_y_LR = center_ecc * sin(225*pi/180)

        center_x_LL = center_ecc * cos(315*pi/180)
        center_y_LL = center_ecc * sin(315*pi/180)

        pos = [[center_x_UR,center_y_UR],[center_x_UL,center_y_UL],
                [center_x_LR,center_y_LR],[center_x_LL,center_y_LL]]

        height = ecc * sin(45*pi/180)
        width = ecc * cos(45*pi/180)

        #responseImage_size = (4,4)
        responseImage_size = (width,height)

        print(monitor_distance, eccentricity_upper_range_cm,
                    eccentricity_lower_range_cm, ecc, center_ecc)
        # 54
        # 7.589205073929137 2.830020081284225
        # 4.759184992644912 2.379592496322456
        print(pos)
        print("height: {} width: {}".format(height, width))



        myCount1 = 0
        #myCount2 = 0
        #myCount3 = 0
        #myCount4 = 0
        #myCount5 = 0
        #myCount6 = 0
        #myCount7 = 0
        #myCount8 = 0
        #myCount9 = 0
        #myCount10 = 0
        #myCount11 = 0
        #myCount12 = 0

        #pos=[(.25,.25),(-.25,.25),(.25,-.25),(-.25,-.25)]
        #locations = ['topright','topleft','bottomright','bottomleft']
        pictures  = ['images/picture_1.png','images/picture_2.png','images/picture_3.png']

        # log params
        params = {"height":height, "width":width}

        trial_list = []
        block_list = []
        block_paths = []

        #blockNum = len(blockTypes)
        testing = False

        total_running = 0
        trial_count = 0

        for i_block in range(blockNum):
            blockType = blockTypes[i_block]

            if blockType == "PRED":
                stimImage_i = random.randrange(0,3)
                stimImage = pictures[stimImage_i]

                #stimImage = 'images/picture_2.png' #pictures[stimImage_i]


            for i in range(trialNum):


                # | cue_dur (0.2s) | delay_resp_period (1s) | rest (0.2s) |
                # | cue_dur (0.2s) | delay + resp           |

        #        delayTime = random.uniform(0.5, 1.2)
        #        cue_dur=1
        #        cue_dur=0.5
        #        rest_dur=0.5
        #        delay_response_total_time = 2


        #        cue_onset=0
        #        cue_dur=0.2
        #
        #        delayTime = random.uniform(0.3, .6)
        #        delay_resp_period = .8
        #
        #        rest_dur=0.2



                circle_onset=cue_onset
                circle_dur=(cue_onset + cue_dur)+delayTime-.25

                delay_onset=(cue_onset + cue_dur)
                delay_dur=delayTime

                resp_onset=delay_onset + delayTime
                resp_dur=delay_resp_period - delayTime

                rest_onset=resp_onset + resp_dur

                cross_onset=rest_onset
                cross_dur=rest_dur

                total_dur = cross_onset+cross_dur

                stim_onset = total_running + cue_onset
                stim_dur = cue_dur

                total_running += total_dur


                print("total time: {}".format(total_dur))



                if blockType == "UNPRED":
                    stimImage_i = random.randrange(0,3)
                    stimImage = pictures[stimImage_i]

                print("{} {} {} {}".format(blockType, i_block, i, stimImage_i ))



                location_ind = [0,1,2,3]
                picture_ind =  [0,1,2]
                pos_ind = [0,1,2,3]

                random.shuffle(pos)
                print(pos)

                #random.shuffle(location_ind)
                #random.shuffle(picture_ind)
                #random.shuffle(pos_ind)

                responseImage1              = pictures[picture_ind[0]]
                responseImage1_i            = picture_ind[0]
                #responseImage1_location     = locations[location_ind[0]]
                #responseImage1_location_i   = location_ind[0]
                responseImage1_pos          = pos[0]
                responseImage1_X            = pos[0][0]
                responseImage1_Y            = pos[0][1]

                #responseImage1_pos_ind      = pos_ind[0]

                responseImage2              = pictures[picture_ind[1]]
                responseImage2_i            = picture_ind[1]
                #responseImage2_location     = locations[location_ind[1]]
                #responseImage2_location_i   = location_ind[1]
                responseImage2_pos          = pos[1]
                responseImage2_X            = pos[1][0]
                responseImage2_Y            = pos[1][1]

                #responseImage2_pos_ind      = pos_ind[1]

                responseImage3              = pictures[picture_ind[2]]
                responseImage3_i            = picture_ind[2]
                #responseImage3_location     = locations[location_ind[2]]
                #responseImage3_location_i   = location_ind[2]
                responseImage3_pos          = pos[2]
                responseImage3_X            = pos[2][0]
                responseImage3_Y            = pos[2][1]

                #responseImage3_pos_ind      = pos_ind[2]

                if responseImage1 == stimImage:
                    targImage       = responseImage1
                    targImage_i     = responseImage1_i
                    targImage_pos   = responseImage1_pos
                    targImage_X     = responseImage1_X
                    targImage_Y     = responseImage1_Y
                elif responseImage2 == stimImage:
                    targImage       = responseImage2
                    targImage_i     = responseImage2_i
                    targImage_pos   = responseImage2_pos
                    targImage_X     = responseImage2_X
                    targImage_Y     = responseImage2_Y
                elif responseImage3 == stimImage:
                    targImage       = responseImage3
                    targImage_i     = responseImage3_i
                    targImage_pos   = responseImage3_pos
                    targImage_X     = responseImage3_X
                    targImage_Y     = responseImage3_Y
                else:
                    targImage       = "NA"
                    targImage_i     = "NA"
                    targImage_pos   = "NA"
                    targImage_X     = "NA"
                    targImage_Y     = "NA"




                app = { "paradigm_name":paradigm_name,
                "trialNum":trialNum,
                "cue_onset":cue_onset,
                "cue_dur":cue_dur,
                "delayTime":delayTime,
                "delay_resp_period":delay_resp_period,
                "rest_dur":rest_dur,

                "trial_count": trial_count,
                "blockType":blockType, "blockNum":blockNum,
                "delay_time":delayTime,
                "stimImage_i":stimImage_i, "stimImage":stimImage,
                "responseImage1":responseImage1,
                "responseImage1_i":responseImage1_i,
                "responseImage1_pos":responseImage1_pos,
                "responseImage1_X":responseImage1_X,
                "responseImage1_Y":responseImage1_Y,

                "responseImage2":responseImage2,
                "responseImage2_i":responseImage2_i,
                "responseImage2_pos":responseImage2_pos,
                "responseImage2_X":responseImage2_X,
                "responseImage2_Y":responseImage2_Y,

                "responseImage3":responseImage3,
                "responseImage3_i":responseImage3_i,
                "responseImage3_pos":responseImage3_pos,
                "responseImage3_X":responseImage3_X,
                "responseImage3_Y":responseImage3_Y,

                "targImage": targImage,
                "targImage_i": targImage_i,
                "targImage_pos":targImage_pos,
                "targImage_X": targImage_pos,
                "targImage_Y": targImage_pos,

                "cue_onset":cue_onset,
                "cue_dur":cue_dur,
                "delay_onset":delay_onset,
                "delay_dur":delay_dur,
                "resp_onset":resp_onset,
                "resp_dur":resp_dur,
                "rest_onset":rest_onset,
                "rest_dur":rest_dur,
                "circle_dur":circle_dur,
                "circle_onset":circle_onset,
                "total_dur":total_dur,
                "cross_onset":cross_onset,
                "cross_dur":cross_dur,
                "delay_resp_period":delay_resp_period
                }

                trial_count += 1

                trial_list.append(app)
            block_list.append(trial_list)
            trial_list = []


        trial_list1 = block_list[0]
        #trial_list2 = block_list[1]
        #trial_list3 = block_list[2]
        #trial_list4 = block_list[3]
        #trial_list5 = block_list[4]
        #trial_list6 = block_list[5]
        #trial_list7 = block_list[6]
        #trial_list8 = block_list[7]
        #trial_list9 = block_list[8]
        #trial_list10 = block_list[9]
        #trial_list11 = block_list[10]
        #trial_list12 = block_list[11]
        #
        thisTrial = trial_list1[0]
        #thisTrial_2 = trial_list2[0]
        #thisTrial_3 = trial_list3[0]
        #thisTrial_4 = trial_list4[0]
        #thisTrial_5 = trial_list5[0]
        #thisTrial_6 = trial_list6[0]
        #thisTrial_7 = trial_list7[0]
        #thisTrial_8 = trial_list8[0]
        #thisTrial_9 = trial_list9[0]
        #thisTrial_10 = trial_list10[0]
        #thisTrial_11 = trial_list11[0]
        #thisTrial_12 = trial_list12[0]
        #
      Begin Experiment:
        dirpath = _thisDir + os.sep + u'data/%s/%s/%s' % (expInfo['participant'], expName, expInfo['date'])
        os.makedirs(dirpath, exist_ok=True)

        block_paths = []

        dfs = []
        for i_block in range(len(blockTypes)):
            block = block_list[i_block]
            blockType = blockTypes[i_block]

            df = pd.DataFrame(block)
            outfile = "{}/{}-{}_12-36.csv".format(dirpath, i_block, blockType)
            df.to_csv(outfile)
            print("outfile: {}".format(outfile))
            dfs.append(df)

            block_paths.append(outfile)

        df_all = pd.concat(dfs)
        outfile = "{}/{}".format(dirpath,"ALL.csv")
        df_all.to_csv(outfile)

        myCount = 0
      Begin Routine:
        myCount = myCount + 1
        if myCount > trialNum:
            trials.finished = True
      End Routine:
        #
        #for k in thisTrial.keys():
        #    thisExp.addData(k, trial_dict[k])
        #
        #
  Routine baseline
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $baseline_duration
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  Routine eyetracking_record
  Routine record
  Routine trial_2
    EyetrackerRecordComponent etRecord_2
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      syncScreenRefresh = False
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    PolygonComponent Fixation_2
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_2
      image [set every repeat] = $thisTrial_2["stimImage"]
      size = (fixation_x,fixation_y)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response
      image = $thisTrial_2["responseImage1"]
      pos [set every repeat] = thisTrial_2["responseImage1_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_2['resp_onset']
      stopVal [duration (s)] = $thisTrial_2['resp_dur']
      units = cm
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    ImageComponent Response_4
      image = $thisTrial_2["responseImage2"]
      pos [set every repeat] = thisTrial_2["responseImage2_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_2['resp_onset']
      stopVal [duration (s)] = $thisTrial_2['resp_dur']
      units = cm
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    ImageComponent Response_5
      image = $thisTrial_2["responseImage3"]
      pos [set every repeat] = thisTrial_2["responseImage3_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_2['resp_onset']
      stopVal [duration (s)] = $thisTrial_2['resp_dur']
      units = cm
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
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    PolygonComponent Delay_2
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisTrial_2['circle_dur']
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    RegionOfInterestComponent roi_2
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_2['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent etrecord_pos_2
      disabled = True
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine trial_3
    EyetrackerRecordComponent etRecord_3
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
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    PolygonComponent Fixation_3
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_3
      image [set every repeat] = $thisTrial_3["stimImage"]
      size = (fixation_x,fixation_y)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_6
      image = $thisTrial_3["responseImage1"]
      pos [set every repeat] = thisTrial_3["responseImage1_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_3['resp_onset']
      stopVal [duration (s)] = $thisTrial_3['resp_dur']
      units = cm
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    ImageComponent Response_7
      image = $thisTrial_3["responseImage2"]
      pos [set every repeat] = thisTrial_3["responseImage2_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_3['resp_onset']
      stopVal [duration (s)] = $thisTrial_3['resp_dur']
      units = cm
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    ImageComponent Response_8
      image = $thisTrial_3["responseImage3"]
      pos [set every repeat] = thisTrial_3["responseImage3_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_3['resp_onset']
      stopVal [duration (s)] = $thisTrial_3['resp_dur']
      units = cm
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    PolygonComponent polygon_3
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
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    PolygonComponent Delay_3
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisTrial_3['circle_dur']
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    RegionOfInterestComponent roi_3
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_3['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent etrecord_pos_3
      disabled = True
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine trial_4
    EyetrackerRecordComponent etRecord_4
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
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    PolygonComponent Fixation_4
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_4
      image [set every repeat] = $thisTrial_4["stimImage"]
      size = (fixation_x,fixation_y)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_9
      image = $thisTrial_4["responseImage1"]
      pos [set every repeat] = thisTrial_4["responseImage1_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_4['resp_onset']
      stopVal [duration (s)] = $thisTrial_4['resp_dur']
      units = cm
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    ImageComponent Response_10
      image = $thisTrial_4["responseImage2"]
      pos [set every repeat] = thisTrial_4["responseImage2_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_4["resp_onset"]
      stopVal [duration (s)] = $thisTrial_4["resp_dur"]
      units = cm
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    ImageComponent Response_11
      image = $thisTrial_4["responseImage3"]
      pos [set every repeat] = thisTrial_4["responseImage3_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_4["resp_onset"]
      stopVal [duration (s)] = $thisTrial_4["resp_dur"]
      units = cm
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    PolygonComponent polygon_4
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
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    PolygonComponent Delay_4
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisTrial_4["circle_dur"]
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    RegionOfInterestComponent roi_4
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_4['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent etrecord_pos_4
      disabled = True
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine trigger
    KeyboardComponent key_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = awaiting trigger
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  Routine codeEnd
    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        #print(thisTrial["responseImage1_pos"])
      End Routine:
        myCount1 += 1

        if myCount1 >= trialNum:
            trials.finished = True
            myCount1 = 0

        #print(myCount1)

        #for k in thisTrial.keys():
        #    thisExp.addData(k, thisTrial[k])
        #
        #thisExp.nextEntry()
  Routine codeEnd_2
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        myCount2 += 1

        if myCount2 > trialNum:
            trials_2.finished = True

        #
        #print(myCount2)

        #for k in thisTrial_2.keys():
        #    thisExp.addData(k, thisTrial_2[k])
        #
        thisExp.nextEntry()
  Routine codeEnd_3
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        myCount3 += 1

        if myCount3 > trialNum:
            trials_3.finished = True


        print(myCount3)

        #for k in thisTrial_3.keys():
        #    thisExp.addData(k, thisTrial_3[k])

        thisExp.nextEntry()
  Routine codeEnd_4
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        myCount4 += 1
        if myCount4 > trialNum:
            trials_4.finished = True


        print(myCount4)

        #for k in thisTrial_4.keys():
        #    thisExp.addData(k, thisTrial_4[k])
        #
        thisExp.nextEntry()
  Routine Eyelink_setup
  Routine eyelink
    CodeComponent code_6
      Code Type = Auto->JS
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      Before Experiment:
        # Written by: Sharif I. Kronemer
        # Last Modified: 3/6/2023

        # Version 1
        task_version = 'v1'

        # ***************************
        # *** IMPORTANT LIBRARIES ***
        # ***************************

        # Python and Psychopy Functions
        import random
        import warnings
        from psychopy import visual, gui, data, core, event, monitors, logging, sound
        from psychopy.hardware import keyboard
        import numpy as np
        import time
        import pylink
        import os
        import platform
        import sys
        from scipy.signal import find_peaks
        import argparse
        from collections import deque
        from scipy.io import loadmat, savemat
        import statistics
        from scipy.signal import savgol_filter, find_peaks, peak_prominences
        from scipy.optimize import curve_fit
        import math

        # EyeLink Functions
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from PIL import Image
        from string import ascii_letters, digits



        class RealEyeLink:

            '''Object to create a real eyelink event'''

            def __init__(self):
                '''Parameters
                   ----------
                eyelink_ver: float
                    Version of eyelink this experiment is running on
                   '''

            def instruction_continue(self) -> None:
                '''Either allows the subject to continue to the next screen of the task or exit'''
                wait_for_keypress = True # Wait indefinitely, terminates upon any key press
                if wait_for_keypress:
                    event.waitKeys(keyList = ['space','escape','p','o'])
                    clear_screen(win)

            def instructions_screens(self, instruction: str) -> None:
                '''Function presents all the instructions needed for the task'''
                task_instructions = visual.TextStim(win, instruction, color = genv.getForegroundColor(), wrapWidth = scn_width/2, units = 'cm')
                clear_screen(win)
                task_instructions.draw()
                win.flip()
                self.instruction_continue()

            def start_experiment(self) -> None:
                self.instructions_screens("Main Task Phase.\n\nAre you ready to start?")
                quit_task()

        def setup():
            # ********************
            # *** SETUP SCREEN ***
            # ********************

            # Setup the subject info screen
            info = {'Session #': 0, 'Subject ID': 'Test', 'EyeLink': ['y','n'], 'EyeLink EDF': 'test.edf'} #,
                #'threshold opacity': 1.0, 'Response Condition (1 or 2)': [1, 2]}

            dlg = gui.DlgFromDict(info, title = 'VisualAttn Experiment')

            # Find experiment date
            info['date'] = data.getDateStr()

            # Filename = Subject ID entered above
            filename = info['Subject ID']

            # Set this variable to True if you use the built-in retina screen as your
            # primary display device on macOS. If have an external monitor, set this
            # variable True if you choose to "Optimize for Built-in Retina Display"
            # in the Displays preference settings.
            use_retina = True

            # ********************
            # *** SETUP WINDOW ***
            # ********************

            # Setup the window
            resolution = [2560, 1440] # Define screen resolution
            win = visual.Window(size = resolution, color = [1,1,1], monitor = 'testMonitor', fullscr = True, units ='cm') #Set color and fullscreen mode (True or False)

            # *****************************************
            # *** MANAGE DATA FOLDERS AND FILENAMES ***
            # *****************************************

            # Behavioral data file
            behavioral_folder = 'Behavioral_Data'

            # Eyelink data file
            results_folder = 'EyeLink_Data'

            # Find experiment date
            info['date'] = data.getDateStr()

            # Filename = Subject ID entered above
            filename = info['Subject ID']

            # EyeLink filename
            tmp_str = info['EyeLink EDF']

            # Strip trailing characters, ignore the ".edf" extension
            edf_fname = tmp_str.rstrip().split('.')[0]

            # Check if the EyeLink filename is valid (length <= 8 & no special char)
            allowed_char = ascii_letters + digits + '_'

            # If too many characters in EyeLink filename
            if not all([c in allowed_char for c in edf_fname]):
                print('ERROR: *** Invalid EDF filename')
                core.quit()  # abort experiment

            elif len(edf_fname) > 8:
                print('ERROR: *** EDF filename should not exceed 8 characters')
                core.quit()  # abort experiment

            # We download EDF data file from the EyeLink Host PC to the local hard
            # drive at the end of each testing session, here we rename the EDF to
            # include session start date/time
            time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
            session_identifier = edf_fname + time_str

            # Check for the behavioral data directory, otherwise make it
            if not os.path.isdir('Behavioral_Data'):
                    os.makedirs('Behavioral_Data')  # if this fails (e.g. permissions) we will get error

            # Check for the EyeLink data directory, otherwise make it
            if not os.path.isdir('EyeLink_Data'):
                    os.makedirs('EyeLink_Data') # if this fails (e.g. permissions) we will get error

            # Define EyeLink folder - directory of task + folder name
            eyelinkFolder = (results_folder + os.path.sep)

            # Show only critical log messages in the PsychoPy console
            logFile = logging.LogFile(behavioral_folder + os.path.sep + filename + '_Session_'+str(info['Session #'])+'_Glare_Illusion_Perception_'+info['date']+'_'+task_version+'.log', level=logging.EXP)




            # EyeLink Dummy mode? - Set to False if testing with actual system
            if info['EyeLink'] == 'y':
                dummy_mode = False

            elif info['EyeLink'] == 'n':
                dummy_mode = True

            # Step 1: Connect to the EyeLink Host PC

            # The Host IP address, by default, is "100.1.1.1".
            # the "el_tracker" objected created here can be accessed through the Pylink
            # Set the Host PC address to "None" (without quotes) to run the script
            # in "Dummy Mode"
            if dummy_mode:
                el_tracker = pylink.EyeLink(None)
            else:
                try:
                    el_tracker = pylink.EyeLink("100.1.1.1")
                except RuntimeError as error:
                    print('ERROR:', error)
                    core.quit()
                    sys.exit()

            # Step 2: Open an EDF data file on the Host PC

            # Define edf fileanme
            edf_file = edf_fname + ".EDF"

            try:
                el_tracker.openDataFile(edf_file)
            except RuntimeError as err:
                print('ERROR:', err)
                # close the link if we have one open
                if el_tracker.isConnected():
                    el_tracker.close()
                core.quit()
                sys.exit()

            # Step 3: Configure the tracker

            # Put the tracker in offline mode before we change tracking parameters
            el_tracker.setOfflineMode()

            # Get the software version:  1-EyeLink I, 2-EyeLink II, 3/4-EyeLink 1000,
            # 5-EyeLink 1000 Plus, 6-Portable DUO
            if dummy_mode:
                eyelink_ver = 0  # set version to 0, in case running in Dummy mode
            else:
                eyelink_ver = 5

            if not dummy_mode:
                vstr = el_tracker.getTrackerVersionString()
                eyelink_ver = int(vstr.split()[-1].split('.')[0])
                # print out some version info in the shell
                print('Running experiment on %s, version %d' % (vstr, eyelink_ver))

            # File and Link data control
            # what eye events to save in the EDF file, include everything by default
            file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
            # what eye events to make available over the link, include everything by default
            link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
            # what sample data to save in the EDF data file and to make available
            # over the link, include the 'HTARGET' flag to save head target sticker
            # data for supported eye trackers
            if eyelink_ver > 3:
                file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,HTARGET,GAZERES,BUTTON,STATUS,INPUT'
                link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
            else:
                file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,GAZERES,BUTTON,STATUS,INPUT'
                link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,STATUS,INPUT'
            el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
            el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
            el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
            el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)

            # Set EyeLink sample rate
            if eyelink_ver > 2 and not dummy_mode:
                el_tracker.sendCommand("sample_rate 1000")

            # Choose a calibration type, H3, HV3, HV5, HV13 (HV = horizontal/vertical),
            el_tracker.sendCommand("calibration_type = HV9")
            # Set a gamepad button to accept calibration/drift check target
            # You need a supported gamepad/button box that is connected to the Host PC
            el_tracker.sendCommand("button_function 5 'accept_target_fixation'")

            # Shrink the spread of the calibration/validation targets
            # if the default outermost targets are not all visible in the bore.
            # The default <x, y display proportion> is 0.88, 0.83 (88% of the display
            # horizontally and 83% vertically)
            el_tracker.sendCommand('calibration_area_proportion 0.88 0.83')
            el_tracker.sendCommand('validation_area_proportion 0.88 0.83')

            # Get the native screen resolution used by PsychoPy
            scn_width, scn_height = win.size

            # Resolution fix for Mac retina displays
            if 'Darwin' in platform.system():
                if use_retina:
                    scn_width = int(scn_width/2.0)
                    scn_height = int(scn_height/2.0)

            # Optional: online drift correction.
            # See the EyeLink 1000 / EyeLink 1000 Plus User Manual

            # Online drift correction to mouse-click position:
            # el_tracker.sendCommand('driftcorrect_cr_disable = OFF')
            # el_tracker.sendCommand('normal_click_dcorr = ON')

            # Online drift correction to a fixed location, e.g., screen center
            el_tracker.sendCommand('driftcorrect_cr_disable = OFF')
            el_tracker.sendCommand('online_dcorr_refposn %d,%d' % (int(scn_width/2.0),
                                                                    int(scn_height/2.0)))
            el_tracker.sendCommand('online_dcorr_button = ON')
            el_tracker.sendCommand('normal_click_dcorr = OFF')

            # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
            # see the EyeLink Installation Guide, "Customizing Screen Settings"
            el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendCommand(el_coords)

            # Write a DISPLAY_COORDS message to the EDF file
            # Data Viewer needs this piece of info for proper visualization, see Data
            # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendMessage(dv_coords)

            # Configure a graphics environment (genv) for tracker calibration
            genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
            print(genv)  # print out the version number of the CoreGraphics library

            # Set background and foreground colors for the calibration target
            # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
            foreground_color = (-1, -1, -1)
            background_color = win.color # Use the same background color as the entire study
            genv.setCalibrationColors(foreground_color, background_color)

            # Set up the calibration target

            # Use a picture as the calibration target
            genv.setTargetType('circle')
            genv.setTargetSize(24)
            #genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp')) #CALIBRATION TARGET IMAGE

            # Configure the size of the calibration target (in pixels)
            # this option applies only to "circle" and "spiral" targets
            # genv.setTargetSize(24)

            # Beeps to play during calibration, validation and drift correction
            # parameters: target, good, error
            #     target -- sound to play when target moves
            #     good -- sound to play on successful operation
            #     error -- sound to play on failure or interruption
            # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
            genv.setCalibrationSounds('off', 'off', 'off')

            # Resolution fix for macOS retina display issues
            if use_retina:
                genv.fixMacRetinaDisplay()

            # Request Pylink to use the PsychoPy window we opened above for calibration
            pylink.openGraphicsEx(genv)

            #calibration task constants
            #set random seed
            rng = np.random.default_rng()

            return


        def main():

            # *********************
            # *** Setup EyeLink ***
            # *********************

            rel = RealEyeLink() #sets up real eyelink object

            # If running EyeLink
            if not dummy_mode:
                task_msg = 'Press O to calibrate tracker'
                rel.instructions_screens(task_msg)

            if not dummy_mode:
                try:
                    el_tracker.doTrackerSetup()
                except RuntimeError as err:
                    print('ERROR:', err)
                    el_tracker.exitCalibration()

            el_tracker.setOfflineMode()

            try:
                el_tracker.startRecording(1, 1, 1, 1)
            except RuntimeError as error:
                print("ERROR:", error)
                rel.terminate_task()

            eye_used = el_tracker.eyeAvailable()

            if eye_used == 1:
                el_tracker.sendMessage("EYE_USED 1 RIGHT")
            elif eye_used == 0 or eye_used == 2:
                el_tracker.sendMessage("EYE_USED 0 LEFT")
                eye_used = 0
            else:
                print("Error in getting the eye information!")
            pylink.pumpDelay(100)

            return


            setup()
            main()
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine codeSave
    CodeComponent code_7
      Code Type = Auto->JS
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      End Experiment:
        outfile = filename+"_thisExp.pkl"
        thisExp.saveAsPickle(outfile)
        print("saving thisExp as pkl here: {}".format(outfile))
  Routine baselineEnd
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 24
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  Routine codeEnd_5
    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        myCount4 += 1
        if myCount5 > trialNum:
            trials_5.finished = True


        print(myCount5)

        #for k in thisTrial_5.keys():
        #    thisExp.addData(k, thisTrial_5[k])
        #
        thisExp.nextEntry()
  Routine trial_5
    EyetrackerRecordComponent etRecord_5
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
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    PolygonComponent Fixation_5
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_5
      image [set every repeat] = $thisTrial_5["stimImage"]
      size = (fixation_x,fixation_y)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_12
      image = $thisTrial_5["responseImage1"]
      pos [set every repeat] = thisTrial_5["responseImage1_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_5['resp_onset']
      stopVal [duration (s)] = $thisTrial_5['resp_dur']
      units = cm
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    ImageComponent Response_13
      image = $thisTrial_5["responseImage2"]
      pos [set every repeat] = thisTrial_5["responseImage2_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_5["resp_onset"]
      stopVal [duration (s)] = $thisTrial_5["resp_dur"]
      units = cm
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    ImageComponent Response_14
      image = $thisTrial_5["responseImage3"]
      pos [set every repeat] = thisTrial_5["responseImage3_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_5["resp_onset"]
      stopVal [duration (s)] = $thisTrial_5["resp_dur"]
      units = cm
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    PolygonComponent polygon_5
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
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    PolygonComponent Delay_5
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisTrial_5["circle_dur"]
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    RegionOfInterestComponent roi_5
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_4['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent etrecord_pos_5
      disabled = True
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine codeEnd_6
    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        myCount6 += 1
        if myCount6 > trialNum:
            trials_6.finished = True


        print(myCount6)
        #
        #for k in thisTrial_6.keys():
        #    thisExp.addData(k, thisTrial_6[k])
        #
        thisExp.nextEntry()
  Routine trial_6
    EyetrackerRecordComponent etRecord_6
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
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    PolygonComponent Fixation_6
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_6
      image [set every repeat] = $thisTrial_6["stimImage"]
      size = (fixation_x,fixation_y)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_15
      image = $thisTrial_6["responseImage1"]
      pos [set every repeat] = thisTrial_6["responseImage1_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_6['resp_onset']
      stopVal [duration (s)] = $thisTrial_6['resp_dur']
      units = cm
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    ImageComponent Response_16
      image = $thisTrial_6["responseImage2"]
      pos [set every repeat] = thisTrial_6["responseImage2_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_6["resp_onset"]
      stopVal [duration (s)] = $thisTrial_6["resp_dur"]
      units = cm
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    ImageComponent Response_17
      image = $thisTrial_6["responseImage3"]
      pos [set every repeat] = thisTrial_6["responseImage3_pos"]
      size = responseImage_size
      startVal [time (s)] = $thisTrial_6["resp_onset"]
      stopVal [duration (s)] = $thisTrial_6["resp_dur"]
      units = cm
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    PolygonComponent polygon_6
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
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    PolygonComponent Delay_6
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisTrial_6["circle_dur"]
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    RegionOfInterestComponent roi_6
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_4['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent etrecord_pos_6
      disabled = True
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine codeEnd_7
    CodeComponent code_10
      Code Type = Auto->JS
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      End Routine:
        myCount7 += 1
        if myCount7 > trialNum:
            trials_7.finished = True


        print(myCount7)

        #for k in thisTrial_7.keys():
        #    thisExp.addData(k, thisTrial_7[k])
        #
        thisExp.nextEntry()
  Routine trial_7
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  Routine codeEnd_8
    CodeComponent code_11
      Code Type = Auto->JS
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      End Routine:
        myCount8 += 1
        if myCount8 > trialNum:
            trials_8.finished = True


        print(myCount8)
        #
        #for k in thisTrial_8.keys():
        #    thisExp.addData(k, thisTrial_8[k])
        #
        thisExp.nextEntry()
  Routine trial_8
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  Routine codeEnd_9
    CodeComponent code_12
      Code Type = Auto->JS
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      End Routine:
        myCount9 += 1
        if myCount9 > trialNum:
            trials_9.finished = True


        print(myCount9)
        #
        #for k in thisTrial_9.keys():
        #    thisExp.addData(k, thisTrial_9[k])
        #
        thisExp.nextEntry()
  Routine trial_9
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  Routine codeEnd_10
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  Routine trial_10
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  Routine codeEnd_11
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  Routine trial_11
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  Routine codeEnd_12
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  Routine trial_12
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  Routine iter_block
    CodeComponent code_16
      Code Type = Auto->JS
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      End Routine:
        blockNum_count += 1

        outfile = filename+"_thisExp.pkl"
        thisExp.saveAsPickle(outfile)
        print("saving thisExp as pkl here: {}".format(outfile))
  Routine start_eyetracking
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        # PUT START RECORD HERE
        eyetracker.setRecordingState(True)
        print("start recording")
  Routine end_eyetracking
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        # PUT END RECORD HERE
        eyetracker.setRecordingState(False)
        print("ended recording")
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine codeStart
  Routine trigger
  Routine start_eyetracking
  Routine baseline
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = blockNum
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block_paths[blockNum_count]
      loopType = random
      nReps = trialNum
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      Routine codeEnd
      Routine trial
    LoopTerminator trials
    Routine baseline
    Routine iter_block
  LoopTerminator blocks
  Routine baseline
  Routine end_eyetracking
  Routine codeSave
