PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = DMS
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      syncScreenRefresh = False
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent sample
      size = (0.5, 0.5)
      startEstim = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent Delay
      fillColor = white
      shape = cross
      size = (0.025, 0.025)
      startEstim = 2
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_1
      anchor = bottom-left
      image = images/picture_1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_2
      anchor = top-left
      image = images/picture_2.png
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_3
      anchor = top-right
      image = images/picture_3.png
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = -1.0
      stopVal [duration (s)] = 0
      text = Begining
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine trial
  LoopTerminator trials
