PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = grey
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = DMS_BEST_eyetracking
  eyetracker = SR Research Ltd
  keyboardBackend = Pyglet
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Routines
  Routine trial
    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      syncScreenRefresh = False
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    PolygonComponent Fixation
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample
      image [set every repeat] = $thisTrial["stimImage"]
      size = (0.125, 0.125)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_1
      image [set every repeat] = $thisTrial["responseImage1"]
      pos [set every repeat] = float(thisTrial["responseImage1_X"]), float(thisTrial["responseImage1_Y"])
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_2
      image [set every repeat] = $thisTrial["responseImage2"]
      pos [set every repeat] = float(thisTrial["responseImage2_X"]), float(thisTrial["responseImage2_Y"])
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_3
      image [set every repeat] = $thisTrial["responseImage3"]
      pos [set every repeat] = float(thisTrial["responseImage3_X"]), float(thisTrial["responseImage3_Y"])
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2
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    PolygonComponent Delay
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent etrecord_pos
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine codeStart
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import pandas as pd
        from math import atan2, degrees

        # random.uniform? or nonparametric

        # MONKEYS WERE REWARDED DO WE NEED TO REWARD SIGNAL CORRECT?
        # TIMING OF DELAY

        #Monkeys were trained to sit comfortably in a primate chair inside a sound
        #attenuating behavioral testing booth. They were seated
        #50 cm
        #away from a LCD monitor with a 144-Hz refresh rate (ASUS, Taiwan).
        # (fixation window radius: 2 to 3 visual degrees)
        #cued item together with either one or two distractors
        #presented at the same eccentricity (3° to 8°),
        #but different visual quadrants #as the cued object.

        #The position of the cued object and the distractors were
        #always randomly chosen. Monkeys were rewarded with a few drops of diluted
        #juice if they performed a saccade toward the cued item. Behavioral performance
        #was high for each of the monkeys (monkey S: 77% over 41 sessions, monkey L:
        #75% over 30 sessions). Monkeys were trained on this task using a library
        #of 22 sample images. For recordings, we used a subset of these images (12),
        #choosing a total of 3 per session. Most sessions (65 out of 71) used the 3
        #objects depicted in Fig. 1: an orange, a green block, and a blue car.



        # BASTOS
        # monitor_distance = 50

        # OP4
        monitor_distance = 54

        #fmIR?


        fixation_degrees = 2.5
        ecc_upper_deg = 8
        ecc_lower_deg = 3

        fixation_radius_cm = monitor_distance * tan(fixation_degrees*pi/180)

        eccentricity_upper_range_cm = monitor_distance * tan(ecc_upper_deg*pi/180)
        eccentricity_lower_range_cm = monitor_distance * tan(ecc_lower_deg*pi/180)

        #54 upper = 7.58
        #54 lower = 2.83

        ecc = (eccentricity_upper_range_cm - eccentricity_lower_range_cm)
        center_ecc = eccentricity_lower_range_cm + (ecc /2)

        center_x_UR = center_ecc * cos(45*pi/180)
        center_y_UR = center_ecc * sin(45*pi/180)

        center_x_UL = center_ecc * cos(135*pi/180)
        center_y_UL = center_ecc * sin(135*pi/180)

        center_x_LR = center_ecc * cos(225*pi/180)
        center_y_LR = center_ecc * sin(225*pi/180)

        center_x_LL = center_ecc * cos(315*pi/180)
        center_y_LL = center_ecc * sin(315*pi/180)

        pos = [[center_x_UR,center_y_UR],[center_x_UL,center_y_UL],
                [center_x_LR,center_y_LR],[center_x_LL,center_y_LL]]

        height = ecc * sin(45*pi/180)
        width = ecc * cos(45*pi/180)

        #responseImage_size = (4,4)
        responseImage_size = (width,height)

        print(monitor_distance, eccentricity_upper_range_cm,
                    eccentricity_lower_range_cm, ecc, center_ecc)
        # 54
        # 7.589205073929137 2.830020081284225
        # 4.759184992644912 2.379592496322456
        print(pos)
        print("height: {} width: {}".format(height, width))


        trialNum = 5
        baseline_duration=5
        delayTime= .5
        delayTime_dist = .2
        etrecord_duration=6
        myCount1 = 0
        myCount2 = 0
        myCount3 = 0
        myCount4 = 0

        #pos=[(.25,.25),(-.25,.25),(.25,-.25),(-.25,-.25)]
        #locations = ['topright','topleft','bottomright','bottomleft']
        pictures  = ['images/picture_1.png','images/picture_2.png','images/picture_3.png']
        blockTypes = ["PRED","UNPRED","PRED","UNPRED"]

        # log params
        params = {"height":height, "width":width}

        trial_list = []
        block_list = []

        blockNum = len(blockTypes)
        testing = False

        trial_count = 0
        for i_block in range(blockNum):
            blockType = blockTypes[i_block]


            if blockType == "PRED":
                stimImage_i = random.randrange(0,3)
                stimImage = pictures[stimImage_i]

            for i in range(trialNum):
                delayTime = random.uniform(0.5, 1.2)

                if blockType == "UNPRED":
                    stimImage_i = random.randrange(0,3)
                    stimImage = pictures[stimImage_i]

                print("{} {} {} {}".format(blockType, i_block, i, stimImage_i ))


        ##        pos_ecc = random.randrange(int(eccentricity_lower_range_cm),
        ##        int(eccentricity_upper_range_cm))
        #        pos_ecc = random.uniform(eccentricity_lower_range_cm,
        #                    eccentricity_upper_range_cm)
        #
        ##        pos = [ ( round(pos_ecc*p[0],2), round(pos_ecc*p[1],2) ) \
        ##                for p in [[1.0,1.0],[1.0,-1.0],[-1.0,-1.0],[-1.0,1.0]]]
        #
        #        pos = [ ( round(pos_ecc*cos(p*pi/180),2),
        #                    round(pos_ecc*sin(p*pi/180),2) ) \
        #                for p in [45, 135, 225, 315]]
        #
        #



                #pos=[(.25,.25),(-.25,.25),(.25,-.25),(-.25,-.25)]

                location_ind = [0,1,2,3]
                picture_ind =  [0,1,2]
                pos_ind = [0,1,2,3]

        #        random.shuffle(locations)
        #        random.shuffle(pictures)
                random.shuffle(pos)
                print(pos)

                #random.shuffle(location_ind)
                #random.shuffle(picture_ind)
                #random.shuffle(pos_ind)

                responseImage1              = pictures[picture_ind[0]]
                responseImage1_i            = picture_ind[0]
                #responseImage1_location     = locations[location_ind[0]]
                #responseImage1_location_i   = location_ind[0]
                responseImage1_pos          = pos[0]
                responseImage1_X            = pos[0][0]
                responseImage1_Y            = pos[0][1]

                #responseImage1_pos_ind      = pos_ind[0]

                responseImage2              = pictures[picture_ind[1]]
                responseImage2_i            = picture_ind[1]
                #responseImage2_location     = locations[location_ind[1]]
                #responseImage2_location_i   = location_ind[1]
                responseImage2_pos          = pos[1]
                responseImage2_X            = pos[1][0]
                responseImage2_Y            = pos[1][1]

                #responseImage2_pos_ind      = pos_ind[1]

                responseImage3              = pictures[picture_ind[2]]
                responseImage3_i            = picture_ind[2]
                #responseImage3_location     = locations[location_ind[2]]
                #responseImage3_location_i   = location_ind[2]
                responseImage3_pos          = pos[2]
                responseImage3_X            = pos[2][0]
                responseImage3_Y            = pos[2][1]

                #responseImage3_pos_ind      = pos_ind[2]




                app = { "blockType":blockType, "blockNum":blockNum,
                "delay_time":delayTime,
                "stimImage_i":stimImage_i, "stimImage":stimImage,
                "responseImage1":responseImage1,
                "responseImage1_i":responseImage1_i,
                "responseImage1_pos":responseImage1_pos,
                "responseImage1_X":responseImage1_X,
                "responseImage1_Y":responseImage1_Y,

                #"responseImage1_pos_ind":responseImage1_pos_ind,
                #"responseImage1_location":responseImage1_location,
                #"responseImage1_location_i":responseImage1_location_i,
                "responseImage2":responseImage2,
                "responseImage2_i":responseImage2_i,
                "responseImage2_pos":responseImage2_pos,
                "responseImage2_X":responseImage2_X,
                "responseImage2_Y":responseImage2_Y,
                #"responseImage2_pos_ind":responseImage2_pos_ind,
                #"responseImage2_location":responseImage2_location,
                #"responseImage2_location_i":responseImage2_location_i,
                "responseImage3":responseImage3,
                "responseImage3_i":responseImage3_i,
                "responseImage3_pos":responseImage3_pos,
                "responseImage3_X":responseImage3_X,
                "responseImage3_Y":responseImage3_Y,

                #"responseImage3_pos_ind":responseImage3_pos_ind,
                #"responseImage3_location":responseImage3_location,
                #"responseImage3_location_i":responseImage3_location_i}
                }

                trial_list.append(app)
            block_list.append(trial_list)
            trial_list = []


        trial_list1 = block_list[0]
        trial_list2 = block_list[1]
        trial_list3 = block_list[2]
        trial_list4 = block_list[3]

        #trial_dict = trial_list1[0]
        thisTrial = trial_list1[0]
        thisTrial_2 = trial_list2[0]
        thisTrial_3 = trial_list3[0]
        thisTrial_4 = trial_list4[0]

        #
        ##dirpath = _thisDir + os.sep + u'data/%s/%s/%s' % (expInfo['participant'], expName, expInfo['date'])
        ##dirpath = _thisDir + os.sep + u'data/%s/%s/%s' % (expInfo['participant'], expName, expInfo['date'])
        #
        #dirpath="/Users/kleinrl/Visual_Attention"
        #
        #os.makedirs(dirpath, exist_ok=True)
        #dfs = []
        #for i_block in range(len(blockTypes)):
        #    block = block_list[i_block]
        #    blockType = blockTypes[i_block]
        #
        #    df = pd.DataFrame(block)
        #    outfile = "{}/{}-{}.csv".format(dirpath, i_block, blockType)
        #    df.to_csv(outfile)
        #
        #    dfs.append(df)
        #
        #df_all = pd.concat(dfs)
        #outfile = "{}/{}".format(dirpath,"ALL.csv")
        #df_all.to_csv(outfile)
      Begin Experiment:
        dirpath = _thisDir + os.sep + u'data/%s/%s/%s' % (expInfo['participant'], expName, expInfo['date'])
        os.makedirs(dirpath, exist_ok=True)

        dfs = []
        for i_block in range(len(blockTypes)):
            block = block_list[i_block]
            blockType = blockTypes[i_block]

            df = pd.DataFrame(block)
            outfile = "{}/{}-{}.csv".format(dirpath, i_block, blockType)
            df.to_csv(outfile)
            print("outfile: {}".format(outfile))
            dfs.append(df)

        df_all = pd.concat(dfs)
        outfile = "{}/{}".format(dirpath,"ALL.csv")
        df_all.to_csv(outfile)

        myCount = 0
      Begin Routine:
        myCount = myCount + 1
        if myCount > trialNum:
            trials.finished = True
      End Routine:
        #
        #for k in thisTrial.keys():
        #    thisExp.addData(k, trial_dict[k])
        #
        #
        #
  Routine baseline
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $baseline_duration
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  Routine eyetracking_record
  Routine record
  Routine trial_2
    EyetrackerRecordComponent etRecord_2
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      syncScreenRefresh = False
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    PolygonComponent Fixation_2
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_2
      image [set every repeat] = $thisTrial_2["stimImage"]
      size = (0.125, 0.125)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent Response
      image [set every repeat] = $thisTrial_2["responseImage1"]
      pos [set every repeat] = thisTrial_2["responseImage1_pos"]
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_4
      image [set every repeat] = $thisTrial_2["responseImage2"]
      pos [set every repeat] = thisTrial_2["responseImage2_pos"]
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_5
      image [set every repeat] = $thisTrial_2["responseImage3"]
      pos [set every repeat] = thisTrial_2["responseImage3_pos"]
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2
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    PolygonComponent Delay_2
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    RegionOfInterestComponent roi_2
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_2['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent etrecord_pos_2
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine trial_3
    EyetrackerRecordComponent etRecord_3
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      syncScreenRefresh = False
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    PolygonComponent Fixation_3
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_3
      image [set every repeat] = $thisTrial_3["stimImage"]
      size = (0.125, 0.125)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_6
      image [set every repeat] = $thisTrial_3["responseImage1"]
      pos [set every repeat] = thisTrial_3["responseImage1_pos"]
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_7
      image [set every repeat] = $thisTrial_3["responseImage2"]
      pos [set every repeat] = thisTrial_3["responseImage2_pos"]
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_8
      image [set every repeat] = $thisTrial_3["responseImage3"]
      pos [set every repeat] = thisTrial_3["responseImage3_pos"]
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    PolygonComponent polygon_3
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2
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    PolygonComponent Delay_3
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    RegionOfInterestComponent roi_3
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_3['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent etrecord_pos_3
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine trial_4
    EyetrackerRecordComponent etRecord_4
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      syncScreenRefresh = False
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    PolygonComponent Fixation_4
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_4
      image [set every repeat] = $thisTrial_4["stimImage"]
      size = (0.125, 0.125)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_9
      image [set every repeat] = $thisTrial_4["responseImage1"]
      pos [set every repeat] = thisTrial_4["responseImage1_pos"]
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_10
      image [set every repeat] = $thisTrial_4["responseImage2"]
      pos [set every repeat] = thisTrial_4["responseImage2_pos"]
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent Response_11
      image [set every repeat] = $thisTrial_4["responseImage3"]
      pos [set every repeat] = thisTrial_4["responseImage3_pos"]
      size = responseImage_size
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      units = cm
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    PolygonComponent polygon_4
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2
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    PolygonComponent Delay_4
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    RegionOfInterestComponent roi_4
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_4['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent etrecord_pos_4
      fillColor = white
      pos [set every frame] = etRecord.pos
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine trigger
    KeyboardComponent key_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = awaiting trigger
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  Routine codeEnd
    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        print(thisTrial["responseImage1_pos"])
      End Routine:
        myCount1 += 1

        if myCount1 >= trialNum:
            trials.finished = True

        print(myCount1)
  Routine codeEnd_2
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        myCount2 += 1

        if myCount2 > trialNum:
            trials_2.finished = True


        print(myCount2)
  Routine codeEnd_3
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        myCount3 += 1

        if myCount3 > trialNum:
            trials_3.finished = True


        print(myCount3)
  Routine codeEnd_4
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        myCount4 += 1
        if myCount4 > trialNum:
            trials_4.finished = True


        print(myCount4)
  Routine Eyelink_setup
  Routine eyelink
    CodeComponent code_6
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        # Written by: Sharif I. Kronemer
        # Last Modified: 3/6/2023

        # Version 1
        task_version = 'v1'

        # ***************************
        # *** IMPORTANT LIBRARIES ***
        # ***************************

        # Python and Psychopy Functions
        import random
        import warnings
        from psychopy import visual, gui, data, core, event, monitors, logging, sound
        from psychopy.hardware import keyboard
        import numpy as np
        import time
        import pylink
        import os
        import platform
        import sys
        from scipy.signal import find_peaks
        import argparse
        from collections import deque
        from scipy.io import loadmat, savemat
        import statistics
        from scipy.signal import savgol_filter, find_peaks, peak_prominences
        from scipy.optimize import curve_fit
        import math

        # EyeLink Functions
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from PIL import Image
        from string import ascii_letters, digits



        class RealEyeLink:

            '''Object to create a real eyelink event'''

            def __init__(self):
                '''Parameters
                   ----------
                eyelink_ver: float
                    Version of eyelink this experiment is running on
                   '''

            def instruction_continue(self) -> None:
                '''Either allows the subject to continue to the next screen of the task or exit'''
                wait_for_keypress = True # Wait indefinitely, terminates upon any key press
                if wait_for_keypress:
                    event.waitKeys(keyList = ['space','escape','p','o'])
                    clear_screen(win)

            def instructions_screens(self, instruction: str) -> None:
                '''Function presents all the instructions needed for the task'''
                task_instructions = visual.TextStim(win, instruction, color = genv.getForegroundColor(), wrapWidth = scn_width/2, units = 'cm')
                clear_screen(win)
                task_instructions.draw()
                win.flip()
                self.instruction_continue()

            def start_experiment(self) -> None:
                self.instructions_screens("Main Task Phase.\n\nAre you ready to start?")
                quit_task()

        def setup():
            # ********************
            # *** SETUP SCREEN ***
            # ********************

            # Setup the subject info screen
            info = {'Session #': 0, 'Subject ID': 'Test', 'EyeLink': ['y','n'], 'EyeLink EDF': 'test.edf'} #,
                #'threshold opacity': 1.0, 'Response Condition (1 or 2)': [1, 2]}

            dlg = gui.DlgFromDict(info, title = 'VisualAttn Experiment')

            # Find experiment date
            info['date'] = data.getDateStr()

            # Filename = Subject ID entered above
            filename = info['Subject ID']

            # Set this variable to True if you use the built-in retina screen as your
            # primary display device on macOS. If have an external monitor, set this
            # variable True if you choose to "Optimize for Built-in Retina Display"
            # in the Displays preference settings.
            use_retina = True

            # ********************
            # *** SETUP WINDOW ***
            # ********************

            # Setup the window
            resolution = [2560, 1440] # Define screen resolution
            win = visual.Window(size = resolution, color = [1,1,1], monitor = 'testMonitor', fullscr = True, units ='cm') #Set color and fullscreen mode (True or False)

            # *****************************************
            # *** MANAGE DATA FOLDERS AND FILENAMES ***
            # *****************************************

            # Behavioral data file
            behavioral_folder = 'Behavioral_Data'

            # Eyelink data file
            results_folder = 'EyeLink_Data'

            # Find experiment date
            info['date'] = data.getDateStr()

            # Filename = Subject ID entered above
            filename = info['Subject ID']

            # EyeLink filename
            tmp_str = info['EyeLink EDF']

            # Strip trailing characters, ignore the ".edf" extension
            edf_fname = tmp_str.rstrip().split('.')[0]

            # Check if the EyeLink filename is valid (length <= 8 & no special char)
            allowed_char = ascii_letters + digits + '_'

            # If too many characters in EyeLink filename
            if not all([c in allowed_char for c in edf_fname]):
                print('ERROR: *** Invalid EDF filename')
                core.quit()  # abort experiment

            elif len(edf_fname) > 8:
                print('ERROR: *** EDF filename should not exceed 8 characters')
                core.quit()  # abort experiment

            # We download EDF data file from the EyeLink Host PC to the local hard
            # drive at the end of each testing session, here we rename the EDF to
            # include session start date/time
            time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
            session_identifier = edf_fname + time_str

            # Check for the behavioral data directory, otherwise make it
            if not os.path.isdir('Behavioral_Data'):
                    os.makedirs('Behavioral_Data')  # if this fails (e.g. permissions) we will get error

            # Check for the EyeLink data directory, otherwise make it
            if not os.path.isdir('EyeLink_Data'):
                    os.makedirs('EyeLink_Data') # if this fails (e.g. permissions) we will get error

            # Define EyeLink folder - directory of task + folder name
            eyelinkFolder = (results_folder + os.path.sep)

            # Show only critical log messages in the PsychoPy console
            logFile = logging.LogFile(behavioral_folder + os.path.sep + filename + '_Session_'+str(info['Session #'])+'_Glare_Illusion_Perception_'+info['date']+'_'+task_version+'.log', level=logging.EXP)




            # EyeLink Dummy mode? - Set to False if testing with actual system
            if info['EyeLink'] == 'y':
                dummy_mode = False

            elif info['EyeLink'] == 'n':
                dummy_mode = True

            # Step 1: Connect to the EyeLink Host PC

            # The Host IP address, by default, is "100.1.1.1".
            # the "el_tracker" objected created here can be accessed through the Pylink
            # Set the Host PC address to "None" (without quotes) to run the script
            # in "Dummy Mode"
            if dummy_mode:
                el_tracker = pylink.EyeLink(None)
            else:
                try:
                    el_tracker = pylink.EyeLink("100.1.1.1")
                except RuntimeError as error:
                    print('ERROR:', error)
                    core.quit()
                    sys.exit()

            # Step 2: Open an EDF data file on the Host PC

            # Define edf fileanme
            edf_file = edf_fname + ".EDF"

            try:
                el_tracker.openDataFile(edf_file)
            except RuntimeError as err:
                print('ERROR:', err)
                # close the link if we have one open
                if el_tracker.isConnected():
                    el_tracker.close()
                core.quit()
                sys.exit()

            # Step 3: Configure the tracker

            # Put the tracker in offline mode before we change tracking parameters
            el_tracker.setOfflineMode()

            # Get the software version:  1-EyeLink I, 2-EyeLink II, 3/4-EyeLink 1000,
            # 5-EyeLink 1000 Plus, 6-Portable DUO
            if dummy_mode:
                eyelink_ver = 0  # set version to 0, in case running in Dummy mode
            else:
                eyelink_ver = 5

            if not dummy_mode:
                vstr = el_tracker.getTrackerVersionString()
                eyelink_ver = int(vstr.split()[-1].split('.')[0])
                # print out some version info in the shell
                print('Running experiment on %s, version %d' % (vstr, eyelink_ver))

            # File and Link data control
            # what eye events to save in the EDF file, include everything by default
            file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
            # what eye events to make available over the link, include everything by default
            link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
            # what sample data to save in the EDF data file and to make available
            # over the link, include the 'HTARGET' flag to save head target sticker
            # data for supported eye trackers
            if eyelink_ver > 3:
                file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,HTARGET,GAZERES,BUTTON,STATUS,INPUT'
                link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
            else:
                file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,GAZERES,BUTTON,STATUS,INPUT'
                link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,STATUS,INPUT'
            el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
            el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
            el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
            el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)

            # Set EyeLink sample rate
            if eyelink_ver > 2 and not dummy_mode:
                el_tracker.sendCommand("sample_rate 1000")

            # Choose a calibration type, H3, HV3, HV5, HV13 (HV = horizontal/vertical),
            el_tracker.sendCommand("calibration_type = HV9")
            # Set a gamepad button to accept calibration/drift check target
            # You need a supported gamepad/button box that is connected to the Host PC
            el_tracker.sendCommand("button_function 5 'accept_target_fixation'")

            # Shrink the spread of the calibration/validation targets
            # if the default outermost targets are not all visible in the bore.
            # The default <x, y display proportion> is 0.88, 0.83 (88% of the display
            # horizontally and 83% vertically)
            el_tracker.sendCommand('calibration_area_proportion 0.88 0.83')
            el_tracker.sendCommand('validation_area_proportion 0.88 0.83')

            # Get the native screen resolution used by PsychoPy
            scn_width, scn_height = win.size

            # Resolution fix for Mac retina displays
            if 'Darwin' in platform.system():
                if use_retina:
                    scn_width = int(scn_width/2.0)
                    scn_height = int(scn_height/2.0)

            # Optional: online drift correction.
            # See the EyeLink 1000 / EyeLink 1000 Plus User Manual

            # Online drift correction to mouse-click position:
            # el_tracker.sendCommand('driftcorrect_cr_disable = OFF')
            # el_tracker.sendCommand('normal_click_dcorr = ON')

            # Online drift correction to a fixed location, e.g., screen center
            el_tracker.sendCommand('driftcorrect_cr_disable = OFF')
            el_tracker.sendCommand('online_dcorr_refposn %d,%d' % (int(scn_width/2.0),
                                                                    int(scn_height/2.0)))
            el_tracker.sendCommand('online_dcorr_button = ON')
            el_tracker.sendCommand('normal_click_dcorr = OFF')

            # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
            # see the EyeLink Installation Guide, "Customizing Screen Settings"
            el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendCommand(el_coords)

            # Write a DISPLAY_COORDS message to the EDF file
            # Data Viewer needs this piece of info for proper visualization, see Data
            # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendMessage(dv_coords)

            # Configure a graphics environment (genv) for tracker calibration
            genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
            print(genv)  # print out the version number of the CoreGraphics library

            # Set background and foreground colors for the calibration target
            # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
            foreground_color = (-1, -1, -1)
            background_color = win.color # Use the same background color as the entire study
            genv.setCalibrationColors(foreground_color, background_color)

            # Set up the calibration target

            # Use a picture as the calibration target
            genv.setTargetType('circle')
            genv.setTargetSize(24)
            #genv.setPictureTarget(os.path.join('images', 'fixTarget.bmp')) #CALIBRATION TARGET IMAGE

            # Configure the size of the calibration target (in pixels)
            # this option applies only to "circle" and "spiral" targets
            # genv.setTargetSize(24)

            # Beeps to play during calibration, validation and drift correction
            # parameters: target, good, error
            #     target -- sound to play when target moves
            #     good -- sound to play on successful operation
            #     error -- sound to play on failure or interruption
            # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
            genv.setCalibrationSounds('off', 'off', 'off')

            # Resolution fix for macOS retina display issues
            if use_retina:
                genv.fixMacRetinaDisplay()

            # Request Pylink to use the PsychoPy window we opened above for calibration
            pylink.openGraphicsEx(genv)

            #calibration task constants
            #set random seed
            rng = np.random.default_rng()

            return


        def main():

            # *********************
            # *** Setup EyeLink ***
            # *********************

            rel = RealEyeLink() #sets up real eyelink object

            # If running EyeLink
            if not dummy_mode:
                task_msg = 'Press O to calibrate tracker'
                rel.instructions_screens(task_msg)

            if not dummy_mode:
                try:
                    el_tracker.doTrackerSetup()
                except RuntimeError as err:
                    print('ERROR:', err)
                    el_tracker.exitCalibration()

            el_tracker.setOfflineMode()

            try:
                el_tracker.startRecording(1, 1, 1, 1)
            except RuntimeError as error:
                print("ERROR:", error)
                rel.terminate_task()

            eye_used = el_tracker.eyeAvailable()

            if eye_used == 1:
                el_tracker.sendMessage("EYE_USED 1 RIGHT")
            elif eye_used == 0 or eye_used == 2:
                el_tracker.sendMessage("EYE_USED 0 LEFT")
                eye_used = 0
            else:
                print("Error in getting the eye information!")
            pylink.pumpDelay(100)

            return


            setup()
            main()
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
Flow
  Routine eyelink
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine codeStart
  Routine trigger
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"{}/{}-{}.csv".format(dirpath, 0, "PRED")
    loopType = random
    nReps = trialNum
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    Routine codeEnd
    Routine trial
  LoopTerminator trials
  Routine baseline
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $"{}/{}-{}.csv".format(dirpath, 1, "UNPRED")
    loopType = random
    nReps = trialNum
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    Routine codeEnd_2
    Routine trial_2
  LoopTerminator trials_2
  Routine baseline
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = $"{}/{}-{}.csv".format(dirpath, 2, "PRED")
    loopType = random
    nReps = trialNum
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    Routine codeEnd_3
    Routine trial_3
  LoopTerminator trials_3
  Routine baseline
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = $"{}/{}-{}.csv".format(dirpath, 3, "UNPRED")
    loopType = random
    nReps = trialNum
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    Routine codeEnd_4
    Routine trial_4
  LoopTerminator trials_4
  Routine baseline
