PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = black
  expName = DMS_v2b
  eyetracker = MouseGaze
  keyboardBackend = PsychToolbox
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine trial
    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      syncScreenRefresh = False
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    PolygonComponent Fixation
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample
      image [set every repeat] = $trial_list[trial_count]["stimImage"]
      size = (0.125, 0.125)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_1
      image [set every repeat] = $trial_dict["responseImage1"]
      pos = trial_dict["responseImage1_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_2
      image [set every repeat] = $trial_dict["responseImage2"]
      pos = trial_dict["responseImage2_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_3
      image [set every repeat] = $trial_dict["responseImage3"]
      pos = trial_dict["responseImage3_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2
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    PolygonComponent Delay
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine codeStart
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import pandas as pd



        pos=[(.25,.25),(-.25,.25),(.25,-.25),(-.25,-.25)]
        locations = ['topright','topleft','bottomright','bottomleft']
        pictures  = ['images/picture_1.png','images/picture_2.png','images/picture_3.png']

        trial_list = []
        block_list = []

        blockTypes = ["UNPRED","PRED","UNPRED","PRED"]

        delayTime= .5
        delayTime_dist = .2

        trialNum = 5
        blockNum = len(blockTypes)

        trial_count = 0
        for i_block in range(blockNum):
            blockType = blockTypes[i_block]

            if blockType == "PRED":
                stimImage_i = random.randrange(0,3)

            for i in range(trialNum):
                delayTime = random.randrange(5,12)/10

                if blockType == "UNPRED":
                    stimImage_i = random.randrange(0,3)


                stimImage = pictures[stimImage_i]

                location_ind = [0,1,2,3]
                picture_ind =  [0,1,2]
                pos_ind = [0,1,2,3]

                random.shuffle(locations)
                random.shuffle(pictures)
                random.shuffle(pos)

                random.shuffle(location_ind)
                random.shuffle(picture_ind)
                random.shuffle(pos_ind)

                responseImage1              = pictures[picture_ind[0]]
                responseImage1_i            = picture_ind[0]
                responseImage1_location     = locations[location_ind[0]]
                responseImage1_location_i   = location_ind[0]
                responseImage1_pos          = pos[0]
                responseImage1_pos_ind      = pos_ind[0]

                responseImage2              = pictures[picture_ind[1]]
                responseImage2_i            = picture_ind[1]
                responseImage2_location     = locations[location_ind[1]]
                responseImage2_location_i   = location_ind[1]
                responseImage2_pos          = pos[1]
                responseImage2_pos_ind      = pos_ind[1]

                responseImage3              = pictures[picture_ind[2]]
                responseImage3_i            = picture_ind[2]
                responseImage3_location     = locations[location_ind[2]]
                responseImage3_location_i   = location_ind[2]
                responseImage3_pos          = pos[2]
                responseImage3_pos_ind      = pos_ind[2]

                app = { "delay_time":delayTime, "stimImage_i":stimImage_i, "stimImage":stimImage,
                "responseImage1":responseImage1, "responseImage1_i":responseImage1_i, "responseImage1_pos":responseImage1_pos, "responseImage1_pos_ind":responseImage1_pos_ind, "responseImage1_location":responseImage1_location,"responseImage1_location_i":responseImage1_location_i,
                "responseImage2":responseImage2, "responseImage2_i":responseImage2_i, "responseImage2_pos":responseImage2_pos, "responseImage2_pos_ind":responseImage2_pos_ind, "responseImage2_location":responseImage2_location, "responseImage2_location_i":responseImage2_location_i,
                "responseImage3":responseImage3, "responseImage3_i":responseImage3_i, "responseImage3_pos":responseImage3_pos, "responseImage3_pos_ind":responseImage3_pos_ind, "responseImage3_location":responseImage3_location, "responseImage3_location_i":responseImage3_location_i}

                trial_list.append(app)
            block_list.append(trial_list)
            trial_list = []


        trial_list1 = block_list[0]
        trial_list2 = block_list[1]
        trial_list3 = block_list[2]
        trial_list4 = block_list[3]
      Begin Routine:
        trial_dict = trial_list[trial_count]

        print(trial_count)
        print(trial_dict)
      End Routine:

        for k in thisTrial.keys():
            thisExp.addData(k, trial_dict[k])
  Routine baseline
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine eyetracking_record
  Routine record
Flow
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine codeStart
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = trialNum
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    Routine trial
  LoopTerminator trials
  Routine baseline
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = trialNum
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    Routine trial
  LoopTerminator trials_2
  Routine baseline
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = trialNum
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    Routine trial
  LoopTerminator trials_3
  Routine baseline
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = trialNum
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    Routine trial
  LoopTerminator trials_4
  Routine baseline
