PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = grey
  expName = DMS_v2bc
  eyetracker = MouseGaze
  keyboardBackend = PsychToolbox
  mgBlink = ('LEFT_BUTTON', 'MIDDLE_BUTTON', 'RIGHT_BUTTON')
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine trial
    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      syncScreenRefresh = False
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    PolygonComponent Fixation
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample
      image [set every repeat] = $thisTrial["stimImage"]
      size = (0.125, 0.125)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_1
      image [set every repeat] = $thisTrial["responseImage1"]
      pos = thisTrial["responseImage1_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_2
      image [set every repeat] = $thisTrial["responseImage2"]
      pos = thisTrial["responseImage2_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_3
      image [set every repeat] = $thisTrial["responseImage3"]
      pos = thisTrial["responseImage3_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2
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    PolygonComponent Delay
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine codeStart
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import pandas as pd



        pos=[(.25,.25),(-.25,.25),(.25,-.25),(-.25,-.25)]
        locations = ['topright','topleft','bottomright','bottomleft']
        pictures  = ['images/picture_1.png','images/picture_2.png','images/picture_3.png']

        trial_list = []
        block_list = []

        blockTypes = ["PRED","UNPRED","PRED","UNPRED"]

        delayTime= .5
        delayTime_dist = .2

        trialNum = 5
        blockNum = len(blockTypes)
        testing = False

        trial_count = 0
        for i_block in range(blockNum):
            blockType = blockTypes[i_block]

            if blockType == "PRED":
                stimImage_i = random.randrange(0,3)
                stimImage = pictures[stimImage_i]

            for i in range(trialNum):
                delayTime = random.randrange(5,12)/10

                if blockType == "UNPRED":
                    stimImage_i = random.randrange(0,3)
                    stimImage = pictures[stimImage_i]

                print("{} {} {} {}".format(blockType, i_block, i, stimImage_i ))


                location_ind = [0,1,2,3]
                picture_ind =  [0,1,2]
                pos_ind = [0,1,2,3]

                random.shuffle(locations)
                random.shuffle(pictures)
                random.shuffle(pos)

                random.shuffle(location_ind)
                random.shuffle(picture_ind)
                random.shuffle(pos_ind)

                responseImage1              = pictures[picture_ind[0]]
                responseImage1_i            = picture_ind[0]
                responseImage1_location     = locations[location_ind[0]]
                responseImage1_location_i   = location_ind[0]
                responseImage1_pos          = pos[0]
                responseImage1_pos_ind      = pos_ind[0]

                responseImage2              = pictures[picture_ind[1]]
                responseImage2_i            = picture_ind[1]
                responseImage2_location     = locations[location_ind[1]]
                responseImage2_location_i   = location_ind[1]
                responseImage2_pos          = pos[1]
                responseImage2_pos_ind      = pos_ind[1]

                responseImage3              = pictures[picture_ind[2]]
                responseImage3_i            = picture_ind[2]
                responseImage3_location     = locations[location_ind[2]]
                responseImage3_location_i   = location_ind[2]
                responseImage3_pos          = pos[2]
                responseImage3_pos_ind      = pos_ind[2]

                app = { "delay_time":delayTime, "stimImage_i":stimImage_i, "stimImage":stimImage,
                "responseImage1":responseImage1, "responseImage1_i":responseImage1_i, "responseImage1_pos":responseImage1_pos, "responseImage1_pos_ind":responseImage1_pos_ind, "responseImage1_location":responseImage1_location,"responseImage1_location_i":responseImage1_location_i,
                "responseImage2":responseImage2, "responseImage2_i":responseImage2_i, "responseImage2_pos":responseImage2_pos, "responseImage2_pos_ind":responseImage2_pos_ind, "responseImage2_location":responseImage2_location, "responseImage2_location_i":responseImage2_location_i,
                "responseImage3":responseImage3, "responseImage3_i":responseImage3_i, "responseImage3_pos":responseImage3_pos, "responseImage3_pos_ind":responseImage3_pos_ind, "responseImage3_location":responseImage3_location, "responseImage3_location_i":responseImage3_location_i}

                trial_list.append(app)
            block_list.append(trial_list)
            trial_list = []


        trial_list1 = block_list[0]
        trial_list2 = block_list[1]
        trial_list3 = block_list[2]
        trial_list4 = block_list[3]

        #trial_dict = trial_list1[0]
        thisTrial = trial_list1[0]
        thisTrial_2 = trial_list2[0]
        thisTrial_3 = trial_list3[0]
        thisTrial_4 = trial_list4[0]

        #
        ##dirpath = _thisDir + os.sep + u'data/%s/%s/%s' % (expInfo['participant'], expName, expInfo['date'])
        ##dirpath = _thisDir + os.sep + u'data/%s/%s/%s' % (expInfo['participant'], expName, expInfo['date'])
        #
        #dirpath="/Users/kleinrl/Visual_Attention"
        #
        #os.makedirs(dirpath, exist_ok=True)
        #dfs = []
        #for i_block in range(len(blockTypes)):
        #    block = block_list[i_block]
        #    blockType = blockTypes[i_block]
        #
        #    df = pd.DataFrame(block)
        #    outfile = "{}/{}-{}.csv".format(dirpath, i_block, blockType)
        #    df.to_csv(outfile)
        #
        #    dfs.append(df)
        #
        #df_all = pd.concat(dfs)
        #outfile = "{}/{}".format(dirpath,"ALL.csv")
        #df_all.to_csv(outfile)
      Begin Experiment:
        dirpath = _thisDir + os.sep + u'data/%s/%s/%s' % (expInfo['participant'], expName, expInfo['date'])
        os.makedirs(dirpath, exist_ok=True)

        dfs = []
        for i_block in range(len(blockTypes)):
            block = block_list[i_block]
            blockType = blockTypes[i_block]

            df = pd.DataFrame(block)
            outfile = "{}/{}-{}.csv".format(dirpath, i_block, blockType)
            df.to_csv(outfile)
            print("outfile: {}".format(outfile))
            dfs.append(df)

        df_all = pd.concat(dfs)
        outfile = "{}/{}".format(dirpath,"ALL.csv")
        df_all.to_csv(outfile)

        myCount = 0
      Begin Routine:
        myCount = myCount + 1
        if myCount > trialNum:
            trials.finished = True
      End Routine:
        #
        #for k in thisTrial.keys():
        #    thisExp.addData(k, trial_dict[k])
        #
        #
        #
  Routine baseline
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine eyetracking_record
  Routine record
  Routine trial_2
    EyetrackerRecordComponent etRecord_2
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      syncScreenRefresh = False
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    PolygonComponent Fixation_2
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_2
      image [set every repeat] = $thisTrial_2["stimImage"]
      size = (0.125, 0.125)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent Response
      image [set every repeat] = $thisTrial_2["responseImage1"]
      pos = thisTrial_2["responseImage1_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_4
      image [set every repeat] = $thisTrial_2["responseImage2"]
      pos = thisTrial_2["responseImage2_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_5
      image [set every repeat] = $thisTrial_2["responseImage3"]
      pos = thisTrial_2["responseImage3_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2
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    PolygonComponent Delay_2
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    RegionOfInterestComponent roi_2
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_2['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine trial_3
    EyetrackerRecordComponent etRecord_3
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      syncScreenRefresh = False
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    PolygonComponent Fixation_3
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_3
      image [set every repeat] = $thisTrial_3["stimImage"]
      size = (0.125, 0.125)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_6
      image [set every repeat] = $thisTrial_3["responseImage1"]
      pos = thisTrial_3["responseImage1_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_7
      image [set every repeat] = $thisTrial_3["responseImage2"]
      pos = thisTrial_3["responseImage2_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_8
      image [set every repeat] = $thisTrial_3["responseImage3"]
      pos = thisTrial_3["responseImage3_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_3
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2
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    PolygonComponent Delay_3
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    RegionOfInterestComponent roi_3
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_3['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine trial_4
    EyetrackerRecordComponent etRecord_4
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      syncScreenRefresh = False
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    PolygonComponent Fixation_4
      disabled = True
      fillColor = white
      shape = circle
      size = (0.0025, 0.0025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent sample_4
      image [set every repeat] = $thisTrial_4["stimImage"]
      size = (0.125, 0.125)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_9
      image [set every repeat] = $thisTrial_4["responseImage1"]
      pos = thisTrial_4["responseImage1_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_10
      image [set every repeat] = $thisTrial_4["responseImage2"]
      pos = thisTrial_4["responseImage2_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent Response_11
      image [set every repeat] = $thisTrial_4["responseImage3"]
      pos = thisTrial_4["responseImage3_pos"]
      size = (0.125, 0.125)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_4
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2
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    PolygonComponent Delay_4
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    RegionOfInterestComponent roi_4
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = thisTrial_4['targetPos']
      save = every look
      shape = triangle
      size = (0.01, 0.01)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine trigger
    KeyboardComponent key_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = awaiting trigger
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  Routine codeEnd
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        myCount = 0
      End Experiment:
        myCount = 0
      End Routine:
        myCount = myCount + 1

        if myCount >= trialNum:
            trials.finished = True
  Routine codeEnd_2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        myCount = 0
      End Experiment:
        myCount = 0
      End Routine:
        myCount = myCount + 1

        if myCount > trialNum:
            trials_2.finished = True


        print(myCount)
  Routine codeEnd_3
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        myCount = 0
      End Experiment:
        myCount = 0
      End Routine:
        myCount = myCount + 1

        if myCount > trialNum:
            trials_3.finished = True


        print(myCount)
  Routine codeEnd_4
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        myCount = 0
      End Experiment:
        myCount = 0
      End Routine:
        myCount = myCount + 1
        if myCount > trialNum:
            trials_4.finished = True


        print(myCount)
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine codeStart
  Routine trigger
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"{}/{}-{}.csv".format(dirpath, 0, "PRED")
    loopType = random
    nReps = trialNum
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    Routine codeEnd
    Routine trial
  LoopTerminator trials
  Routine baseline
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $"{}/{}-{}.csv".format(dirpath, 1, "UNPRED")
    loopType = random
    nReps = trialNum
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    Routine codeEnd_2
    Routine trial_2
  LoopTerminator trials_2
  Routine baseline
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = $"{}/{}-{}.csv".format(dirpath, 2, "PRED")
    loopType = random
    nReps = trialNum
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    Routine codeEnd_3
    Routine trial_3
  LoopTerminator trials_3
  Routine baseline
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = $"{}/{}-{}.csv".format(dirpath, 3, "UNPRED")
    loopType = random
    nReps = trialNum
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    Routine codeEnd_4
    Routine trial_4
  LoopTerminator trials_4
  Routine baseline
